PsychoPy2experiment version="2020.2.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = cal_abstract
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Routines
  Routine End
    TextComponent end_text1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = You have finished the experiment!
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    TextComponent end_text2
      letterHeight = 0.03
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Press “e” to exit.
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    KeyboardComponent end_resp
      allowedKeys = 'e'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Block1
    ImageComponent image1
      image [set every repeat] = $Block1Stim
      startVal [time (s)] = 0.0
      texture resolution = 512
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    TextComponent text1
      letterHeight = 0.03
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = <-  or  ->
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    KeyboardComponent key_resp1
      allowedKeys = 'left','right'
      correctAns = $Block1Corr
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine Feedback1
    CodeComponent code1
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp1.keys == Block1Corr:
            trialFeedback1 = 'Correct!'
            trialBinary1 = 1
        else:
            trialFeedback1 = 'Incorrect'
            trialBinary1 = 0

        Block1_loop.addData('trialCorrect', trialBinary1)
    TextComponent feedback_text1
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
      text [set every repeat] = $trialFeedback1
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  Routine Block2
    ImageComponent image2
      image [set every repeat] = $Block2Stim
      startVal [time (s)] = 0.0
      texture resolution = 512
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    TextComponent text2
      letterHeight = 0.03
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = <-  or  ->
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    KeyboardComponent key_resp2
      allowedKeys = 'left','right'
      correctAns = $Block2Corr
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine Feedback2
    CodeComponent code2
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp2.keys == Block2Corr:
            trialFeedback2 = 'Correct!'
            trialBinary2 = 1
        else:
            trialFeedback2 = 'Incorrect'
            trialBinary2 = 0

        Block2_loop.addData('trialCorrect', trialBinary2)
    TextComponent feedback_text2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
      text [set every repeat] = $trialFeedback2
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  Routine Block3
    ImageComponent image3
      image [set every repeat] = $Block3Stim
      startVal [time (s)] = 0.0
      texture resolution = 512
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    TextComponent text3
      letterHeight = 0.03
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = <-  or  ->
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    KeyboardComponent key_resp3
      allowedKeys = 'left','right'
      correctAns = $Block3Corr
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine Feedback3
    CodeComponent code3
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp3.keys == Block3Corr:
            trialFeedback3 = 'Correct!'
            trialBinary3 = 1
        else:
            trialFeedback3 = 'Incorrect'
            trialBinary3 = 0

        Block2_loop.addData('trialCorrect', trialBinary3)
    TextComponent feedback_text3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
      text [set every repeat] = $trialFeedback3
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  Routine Start1
    TextComponent start_text1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Starting Block 1.
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    TextComponent start_text2
      letterHeight = 0.03
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Press “s” to start the block.
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    KeyboardComponent start_resp1
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Welcome
    TextComponent welcome_text1
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Welcome to the Experiment!
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    TextComponent welcome_text2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = We appreciate your participation.
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    TextComponent welcome_text3
      letterHeight = 0.03
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Press “enter” or “return” to continue.
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    KeyboardComponent welcome_resp
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Start2
    TextComponent start_text3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Starting Block 2.
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    TextComponent start_text4
      letterHeight = 0.03
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Press “s” to start the block.
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    KeyboardComponent start_resp2
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Start3
    TextComponent start_text5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Starting Block 3.
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    TextComponent start_text6
      letterHeight = 0.03
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Press “s” to start the block.
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    KeyboardComponent start_resp3
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Break1
    TextComponent break_text1
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        You have finished block 1/3. Feel free to take a short break.

        When you are ready to continue, press “c”.
    KeyboardComponent break_resp1
      allowedKeys = 'c'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Break2
    TextComponent break_text2
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        You have finished block 2/3. Feel free to take a short break.

        When you are ready to continue, press “c”.
    KeyboardComponent break_resp2
      allowedKeys = 'c'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instructions
    TextComponent instruct_text1
      letterHeight = 0.05
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Text
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    TextComponent instruct_text2
      letterHeight = 0.03
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Press “enter” or “return” to continue.
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    KeyboardComponent instruct_resp1
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine InstructReminder
    TextComponent intructRemind_text1
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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      text:
        Reminder:

        Some stimuli always have a correct “Left” response, and others always have a correct “Right” response.

        For others, the correct response is opposite from the previous stimulus.
    TextComponent instructRemind_text2
      letterHeight = 0.03
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Press “enter” or “return” to continue.
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    KeyboardComponent instructRemind_resp1
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Welcome
  LoopInitiator Instruction_loop loopType="TrialHandler"
    conditionsFile = instructions/Instructions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Text', 'You will be presented with a series of images. It is your job to learn, through trial and error, whether the “Left” or “Right” arrow key should be pressed for each image.')]),
      OrderedDict([('Text', 'For some images you should always press “Left”, and for others you should always press “Right” arrow key.')]),
      OrderedDict([('Text', 'Some images are special, the correct response will the opposite of the preceding response. So, if you previously correctly responded “Left”, then the correct response would now be “Right”.')]),
      OrderedDict([('Text', 'After each response, you will be told whether you got the item correct or incorrect.')]),
      OrderedDict([('Text', 'You can take as long as you like on each image, but the task will not continue until you press “Left” or “Right” arrow key.')]),
      OrderedDict([('Text', 'This experiment will have three blocks, each block will take approximately 10 minutes to complete.')])]
    Routine Instructions
  LoopTerminator Instruction_loop
  Routine Start1
  LoopInitiator Block1_loop loopType="TrialHandler"
    conditionsFile = blocks/Block1.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Block1Type', 'Fix1'), ('Block1Stim', '/Users/nmuncy/Projects/cal_abstract/stimuli/School/55.jpg'), ('Block1Corr', 'left')]),
      OrderedDict([('Block1Type', 'Fix1'), ('Block1Stim', '/Users/nmuncy/Projects/cal_abstract/stimuli/School/30.jpg'), ('Block1Corr', 'left')]),
      OrderedDict([('Block1Type', 'Cond'), ('Block1Stim', '/Users/nmuncy/Projects/cal_abstract/stimuli/Small/6.jpg'), ('Block1Corr', 'right')]),
      OrderedDict([('Block1Type', 'Fix2'), ('Block1Stim', '/Users/nmuncy/Projects/cal_abstract/stimuli/Dangerous/6.jpg'), ('Block1Corr', 'right')]),
      OrderedDict([('Block1Type', 'Fix2'), ('Block1Stim', '/Users/nmuncy/Projects/cal_abstract/stimuli/Dangerous/50.jpg'), ('Block1Corr', 'right')]),
      OrderedDict([('Block1Type', 'Cond'), ('Block1Stim', '/Users/nmuncy/Projects/cal_abstract/stimuli/Small/3.jpg'), ('Block1Corr', 'left')]),
      OrderedDict([('Block1Type', 'Cond'), ('Block1Stim', '/Users/nmuncy/Projects/cal_abstract/stimuli/Small/54.jpg'), ('Block1Corr', 'right')]),
      OrderedDict([('Block1Type', 'Fix2'), ('Block1Stim', '/Users/nmuncy/Projects/cal_abstract/stimuli/Dangerous/44.jpg'), ('Block1Corr', 'right')]),
      OrderedDict([('Block1Type', 'Fix2'), ('Block1Stim', '/Users/nmuncy/Projects/cal_abstract/stimuli/Dangerous/19.jpg'), ('Block1Corr', 'right')]),
      OrderedDict([('Block1Type', 'Fix1'), ('Block1Stim', '/Users/nmuncy/Projects/cal_abstract/stimuli/School/37.jpg'), ('Block1Corr', 'left')])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
    Routine Block1
    Routine Feedback1
  LoopTerminator Block1_loop
  Routine Break1
  Routine InstructReminder
  Routine Start2
  LoopInitiator Block2_loop loopType="TrialHandler"
    conditionsFile = blocks/Block2.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Block2Type', 'Fix1'), ('Block2Stim', '/Users/nmuncy/Projects/cal_abstract/stimuli/Old/23.jpg'), ('Block2Corr', 'right')]),
      OrderedDict([('Block2Type', 'Cond'), ('Block2Stim', '/Users/nmuncy/Projects/cal_abstract/stimuli/Wealth/0.jpg'), ('Block2Corr', 'left')]),
      OrderedDict([('Block2Type', 'Fix1'), ('Block2Stim', '/Users/nmuncy/Projects/cal_abstract/stimuli/Old/17.jpg'), ('Block2Corr', 'right')]),
      OrderedDict([('Block2Type', 'Fix2'), ('Block2Stim', '/Users/nmuncy/Projects/cal_abstract/stimuli/Healthy/38.jpg'), ('Block2Corr', 'left')]),
      OrderedDict([('Block2Type', 'Fix2'), ('Block2Stim', '/Users/nmuncy/Projects/cal_abstract/stimuli/Healthy/58.jpg'), ('Block2Corr', 'left')]),
      OrderedDict([('Block2Type', 'Fix2'), ('Block2Stim', '/Users/nmuncy/Projects/cal_abstract/stimuli/Healthy/57.jpg'), ('Block2Corr', 'left')]),
      OrderedDict([('Block2Type', 'Fix2'), ('Block2Stim', '/Users/nmuncy/Projects/cal_abstract/stimuli/Healthy/28.jpg'), ('Block2Corr', 'left')]),
      OrderedDict([('Block2Type', 'Cond'), ('Block2Stim', '/Users/nmuncy/Projects/cal_abstract/stimuli/Wealth/37.jpg'), ('Block2Corr', 'right')]),
      OrderedDict([('Block2Type', 'Cond'), ('Block2Stim', '/Users/nmuncy/Projects/cal_abstract/stimuli/Wealth/50.jpg'), ('Block2Corr', 'left')]),
      OrderedDict([('Block2Type', 'Cond'), ('Block2Stim', '/Users/nmuncy/Projects/cal_abstract/stimuli/Wealth/21.jpg'), ('Block2Corr', 'right')])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
    Routine Block2
    Routine Feedback2
  LoopTerminator Block2_loop
  Routine Break2
  Routine InstructReminder
  Routine Start3
  LoopInitiator Block3_loop loopType="TrialHandler"
    conditionsFile = blocks/Block3.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Block3Type', 'Fix2'), ('Block3Stim', '/Users/nmuncy/Projects/cal_abstract/stimuli/Soft/26.jpg'), ('Block3Corr', 'right')]),
      OrderedDict([('Block3Type', 'Fix1'), ('Block3Stim', '/Users/nmuncy/Projects/cal_abstract/stimuli/Sad/0.jpg'), ('Block3Corr', 'left')]),
      OrderedDict([('Block3Type', 'Fix1'), ('Block3Stim', '/Users/nmuncy/Projects/cal_abstract/stimuli/Sad/14.jpg'), ('Block3Corr', 'left')]),
      OrderedDict([('Block3Type', 'Fix1'), ('Block3Stim', '/Users/nmuncy/Projects/cal_abstract/stimuli/Sad/26.jpg'), ('Block3Corr', 'left')]),
      OrderedDict([('Block3Type', 'Fix1'), ('Block3Stim', '/Users/nmuncy/Projects/cal_abstract/stimuli/Sad/13.jpg'), ('Block3Corr', 'left')]),
      OrderedDict([('Block3Type', 'Cond'), ('Block3Stim', '/Users/nmuncy/Projects/cal_abstract/stimuli/Smell/29.jpg'), ('Block3Corr', 'right')]),
      OrderedDict([('Block3Type', 'Fix2'), ('Block3Stim', '/Users/nmuncy/Projects/cal_abstract/stimuli/Soft/46.jpg'), ('Block3Corr', 'right')]),
      OrderedDict([('Block3Type', 'Fix2'), ('Block3Stim', '/Users/nmuncy/Projects/cal_abstract/stimuli/Soft/8.jpg'), ('Block3Corr', 'right')]),
      OrderedDict([('Block3Type', 'Fix2'), ('Block3Stim', '/Users/nmuncy/Projects/cal_abstract/stimuli/Soft/35.jpg'), ('Block3Corr', 'right')]),
      OrderedDict([('Block3Type', 'Cond'), ('Block3Stim', '/Users/nmuncy/Projects/cal_abstract/stimuli/Smell/57.jpg'), ('Block3Corr', 'left')]),
      OrderedDict([('Block3Type', 'Fix1'), ('Block3Stim', '/Users/nmuncy/Projects/cal_abstract/stimuli/Sad/43.jpg'), ('Block3Corr', 'left')])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
    Routine Block3
    Routine Feedback3
  LoopTerminator Block3_loop
  Routine End
